opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: FA_50mMkcl_Erg_standardized_protocol
author: Akash Emmanuel Aravindan
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  Rack: {definitionId: opentrons/opentrons_10_tuberack_nest_4x50ml_6x15ml_conical/1, slot: 4}
  Plate: {definitionId: opentrons/corning_384_wellplate_112ul_flat/1, slot: 5}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Master Mix ERG: {description: 500 mM KCl, 50 mM TRIS + Protein}
  - DNA Buffer: {description: 500 mM KCl, 50 nM DNA, 50 mM TRIS}
ingredLocations:
  Plate:
    Master Mix ERG {volume: 50}: E1-G1
  Rack:
    DNA Buffer {volume: 5000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: ERG and EWSR1: Prepare Buffer 
  pipette: p300_single_gen2
  volume: 25
  path: multiDispense
  changeTip: once
  aspirate_labware: Rack
  aspirate_wells: A1
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  aspirate_touchTip_checkbox: true
  dispense_labware: Plate
  dispense_wells: E2-G2, E3-G3, E4-G4, E5-G5, E6-G6, E7-G7, E8-G8, E9-G9, E10-G10, E11-G11, E12-G12, E13-G13, E14-G14, E15-G15, E16-G16, E17-G17, E18-G18, E19-G19, E20-G20, E21-G21, E22-G22, E23-G23, E24-G24
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: source_well
- stepType: moveLiquid
  stepName: ERG: Serial Dilution
  pipette: p300_single_gen2
  volume: 25
  path: single
  changeTip: once
  aspirate_labware: Plate
  aspirate_wells: E1-G1, E2-G2, E3-G3, E4-G4, E5-G5, E6-G6, E7-G7, E8-G8, E9-G9, E10-G10, E11-G11, E12-G12, E13-G13, E14-G14, E15-G15, E16-G16, E17-G17, E18-G18, E19-G19, E20-G20, E21-G21, E22-G22, E23-G23
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  dispense_labware: Plate
  dispense_wells: E2-G2, E3-G3, E4-G4, E5-G5, E6-G6, E7-G7, E8-G8, E9-G9, E10-G10, E11-G11, E12-G12, E13-G13, E14-G14, E15-G15, E16-G16, E17-G17, E18-G18, E19-G19, E20-G20, E21-G21, E22-G22, E23-G23, E24-G24
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 35
- stepType: moveLiquid
  stepName: Discard excess volume
  pipette: p300_single_gen2
  volume: 25
  path: multiAspirate
  changeTip: always
  aspirate_labware: Plate
  aspirate_wells: E24-G24
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  dispense_labware: Trash
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 25
  path: single
  changeTip: always
  aspirate_labware: Rack
  aspirate_wells: A1
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  dispense_labware: Plate
  dispense_wells: D24
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single_gen2, volume: 295, labware: Rack, well: A1, offsetFromBottomMm: 1, flowRate: 46.43}
- touchTip: {pipette: p300_single_gen2, labware: Rack, well: A1, offsetFromBottomMm: 116.8}
- dispense: {pipette: p300_single_gen2, volume: 25, labware: Plate, well: E2, offsetFromBottomMm: 0.5, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 25, labware: Plate, well: F2, offsetFromBottomMm: 0.5, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 25, labware: Plate, well: G2, offsetFromBottomMm: 0.5, flowRate: 46.43}
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