opentrons/protocol-designer 5.2.6
schemaVersion: 4
protocolName: Protein Aliquoting
author: Akash Emmanuel Aravindan
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: right}
modules:
  temperatureModuleV2: {slot: 10}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 7}
  Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL: {definitionId: opentrons/opentrons_96_aluminumblock_generic_pcr_strip_200ul/1, slot: temperatureModuleV2}
  Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical: {definitionId: opentrons/opentrons_10_tuberack_falcon_4x50ml_6x15ml_conical/1, slot: 8}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Protein Stock: {description: Concentrated Protein}
ingredLocations:
  Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical:
    Protein Stock {volume: 1000}: A1
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: false
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A1
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  aspirate_wellOrder_first: l2r
  aspirate_wellOrder_second: t2b
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  disposalVolume_checkbox: true
  disposalVolume_volume: 5
  blowout_location: Trash
labwareDefinitions:
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commands:
- temperatureModule/deactivate: {module: temperatureModuleV2}
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 20, labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 5, labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 5, labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL, well: B1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 5, labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL, well: C1, offsetFromBottomMm: 0.5, flowRate: 3.78}
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